PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = $[-0.773,-0.757,-0.741]
  expName = svc
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Routines
  Routine trial
    ImageComponent image_prompt
      image [set every repeat] = $prompt_image
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.7
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    TextComponent trait_text
      letterHeight = 0.075
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.7
      text [set every repeat] = $trait
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    KeyboardComponent key_resp
      allowedKeys = 'left','right','comma','period'
      durationEstim = 4.7
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent yes_image
      color [set every repeat] = $[1,1,1]
      image [set every repeat] = resources/yes.png
      pos = (-0.21, -0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.7
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    ImageComponent no_image
      image = resources/no.png
      pos = (0.21, -0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.7
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  Routine instructions
    TextComponent instruction_text
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Self v Change instruction text
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  Routine block_instructions
    CodeComponent block_instruction_code
      Code Type = Auto->JS
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      Begin Experiment:
        #
        # Custom colors
        custom_orange = '#FC9337'
        custom_purple = '#7C46F1'
        colors = [custom_orange, custom_purple]
        shuffle(colors)
        prompt1_text = 'True about me as a parent?'
        prompt1_images = {custom_orange: 'resources/self-200-orange.png', custom_purple: 'resources/self-200-purple.png'}

        prompt2_text = 'Can this change for a parent?'
        prompt2_images = {custom_orange: 'resources/delta-200-orange.png', custom_purple: 'resources/delta-200-purple.png'}

        # Specify some default, acceptable values.
        block_color = colors[0]
        block_prompt = prompt1_text
        prompt_image = prompt1_images[block_color]
      Begin Routine:
        #
        # Display the condition prompt before the first trial,
        # or after every block_size trials
        block_size = 5
        if (trials.thisTrialN > 0 and trials.thisTrialN % block_size == 0) or trials.thisTrialN == 0:
            block_duration = 4.7
            temp_condition = trials.thisTrial['condition']
            if temp_condition in [1, 2, 3]:
                block_prompt = prompt1_text
                block_color = colors[0]
                prompt_image = prompt1_images[block_color]
            else:
                block_prompt = prompt2_text
                block_color = colors[1]
                prompt_image = prompt2_images[block_color]
        else:
            block_duration = 0.0
    TextComponent block_instruction_text
      color [set every repeat] = $block_color
      durationEstim = 4.7
      letterHeight = 0.075
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $block_duration
      text [set every repeat] = $block_prompt
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    ImageComponent block_image_prompt
      durationEstim = 4.7
      image [set every repeat] = $prompt_image
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $block_duration
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  Routine end
    TextComponent end_text
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Thank you
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  Routine ISI
    TextComponent blank_text_for_ISI
      durationEstim = 0.277
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trial_number', 1), ('condition', 2), ('jitter', 0.126), ('reverse_code', 1), ('syllables', 2), ('trait', 'depressed')]),
      OrderedDict([('trial_number', 2), ('condition', 3), ('jitter', 0.161), ('reverse_code', 1), ('syllables', 2), ('trait', 'risky')]),
      OrderedDict([('trial_number', 3), ('condition', 3), ('jitter', 0.325), ('reverse_code', 1), ('syllables', 2), ('trait', 'snobby')]),
      OrderedDict([('trial_number', 4), ('condition', 1), ('jitter', 0.05), ('reverse_code', 1), ('syllables', 1), ('trait', 'calm')]),
      OrderedDict([('trial_number', 5), ('condition', 1), ('jitter', 5.195), ('reverse_code', 1), ('syllables', 2), ('trait', 'helpful')]),
      OrderedDict([('trial_number', 6), ('condition', 6), ('jitter', 0.484), ('reverse_code', 1), ('syllables', 3), ('trait', 'controlling')]),
      OrderedDict([('trial_number', 7), ('condition', 5), ('jitter', 0.271), ('reverse_code', 1), ('syllables', 1), ('trait', 'plain')]),
      OrderedDict([('trial_number', 8), ('condition', 6), ('jitter', 0.065), ('reverse_code', 1), ('syllables', 1), ('trait', 'fake')]),
      OrderedDict([('trial_number', 9), ('condition', 5), ('jitter', 0.326), ('reverse_code', 0), ('syllables', 3), ('trait', 'popular')]),
      OrderedDict([('trial_number', 10), ('condition', 6), ('jitter', 5.131), ('reverse_code', 1), ('syllables', 2), ('trait', 'jealous')]),
      OrderedDict([('trial_number', 11), ('condition', 3), ('jitter', 0.287), ('reverse_code', 1), ('syllables', 3), ('trait', 'assertive')])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
    Routine block_instructions
    Routine trial
    Routine ISI
  LoopTerminator trials
  Routine end
